CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does contain "Blue).tif")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Results
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:Results
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:3
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.07,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Threshold
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):17,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Volumes/incell$/Imanol/9.06.2022/Ima_dapi_C12 cocultures A549/Ima_dapi_C12_CoXculture eto a549 c12_1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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